PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
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Routines
  Routine trial1
    ImageComponent tree1
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree1_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree2
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree2_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree3
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree3_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree4
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree4_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree5
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree5_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree6
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree6_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent square
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine rewardframe
    ImageComponent tree1_3
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_3
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_3
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_3
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree5_3
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree6_3
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent square_3
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent reward
      color = green
      letterHeight = 0.05
      pos = (-0.6, -0.08)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rewardval
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    MouseComponent resp_2
      clickable = tree4_3
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine rewardframe1
    ImageComponent tree1_4
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_4
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree3_4
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree4_4
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent circle3
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent reward_2
      color = green
      letterHeight = 0.05
      pos = (-0.6, -0.08)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
      text [set every repeat] = $rewardval1
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    MouseComponent resp
      clickable = tree1_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    ImageComponent forward
      image = images/arrow.png
      pos = (0.5, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    MouseComponent sol
      clickable = skipsq, tree1_4
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent gcircle_2
      image = images/gcircle.png
      pos = (0, -0.2)
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent skipsq
      image = images/square.png
      pos = (0.5, -0.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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  Routine rewardframe2
    ImageComponent tree1_5
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree2_5
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_5
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree4_5
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent circle_5
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent reward_3
      color = green
      letterHeight = 0.05
      pos = (0.6, -0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every repeat] = $rewardval2
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    ImageComponent forward_7
      image = images/arrow.png
      pos = (-0.5, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent sol_2
      clickable = skipsq_2, tree2_5
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent skipsq_2
      image = images/square.png
      pos = (-0.5, -0.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent gcircle_5
      image = images/gcircle.png
      pos = (0, -0.2)
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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  Routine rewardframe3
    ImageComponent tree1_7
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_7
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_7
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_7
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent square_7
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent reward_4
      color = green
      letterHeight = 0.05
      pos = (-0.6, -0.08)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $rewardval3
    MouseComponent resp_4
      clickable = tree3_7
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent endkey_3
      Code Type = Auto->JS
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      End Routine:
        if key_resp_3.keys is not None and len(key_resp_3.keys)>0 :
                reward3.finished=1
    ImageComponent forward_8
      image = images/arrow.png
      pos = (0.5, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = The end~
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  Routine startframe
    MouseComponent mouse
      clickable = square_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent square_2
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent tree1_2
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_2
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_2
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_2
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent forward_14
      image = images/arrow.png
      pos = (0.5, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine intro
    TextComponent introtext
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        Hey there! This is the basic foraging task.
        Rules:
        1. Click on the circle at the bottom center to start the game
        2.  Click of the patch adjacent to the circle to collect the reward
        3. Click the space bar to move forward to the next patch.
        Your goal is to maximise your reward in the given time
        Goodluck!
  Routine movetrees
    ImageComponent tree1_6
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree1_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
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    ImageComponent tree2_6
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree2_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
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    ImageComponent tree3_6
      image = images/tree.png
      pos [set every repeat] = $(-0.5,0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree4_6
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent circle5
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine movetrees_2
    ImageComponent tree1_8
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree4_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree2_8
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree3_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree3_8
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree2_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree4_8
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree1_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent square_8
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine movetrees_3
    ImageComponent tree1_9
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree1_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree2_9
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree2_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree3_9
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree3_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree4_9
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree4_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent square_9
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine rewardframe4
    ImageComponent tree1_10
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_10
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_10
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_10
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent square_10
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent reward_5
      color = green
      letterHeight = 0.05
      pos = (0.6, -0.08)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rewardval4
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    MouseComponent resp_5
      clickable = tree2_5
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent endkey_4
      Code Type = Auto->JS
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      End Routine:
        if key_resp_4.keys is not None and len(key_resp_4.keys)>0 :
                reward4.finished=1
    ImageComponent forward_9
      image = images/arrow.png
      pos = (-0.5, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine rewardframe5
    ImageComponent tree1_11
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_11
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_11
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_11
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent square_11
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent reward_6
      color = green
      letterHeight = 0.05
      pos = (-0.6, -0.08)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $rewardval5
    MouseComponent resp_6
      clickable = tree3_7
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent endkey_5
      Code Type = Auto->JS
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      End Routine:
        if key_resp_5.keys is not None and len(key_resp_5.keys)>0 :
                reward5.finished=1
    ImageComponent forward_10
      image = images/arrow.png
      pos = (0.5, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine startframe2
    MouseComponent mouse_2
      clickable = tree1_14
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent square_14
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent tree1_14
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_14
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_14
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_14
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    TextComponent text_2
      color = black
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Start foraging!
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  Routine rewardframe1_2
    ImageComponent tree1_12
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent tree2_12
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree3_12
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree4_12
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent circle2
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent wait_3
      color = black
      letterHeight = 0.02
      pos = (-0.6, -0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every repeat] = wait
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    ImageComponent forward_2
      image = images/arrow.png
      pos = (0.5, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent squaree_2
      image = images/square.png
      pos = (0.5, -0.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    ImageComponent gcircle
      image = images/gcircle.png
      pos = (0, -0.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine rewardframe2_2
    ImageComponent tree1_13
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree2_13
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent tree3_13
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree4_13
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent circle6
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent wait
      color = black
      letterHeight = 0.02
      pos = (0.6, -0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every repeat] = wait
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    ImageComponent forward_3
      image = images/arrow.png
      pos = (-0.5, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine rewardframe3_2
    ImageComponent tree1_15
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent tree2_15
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent tree3_15
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent tree4_15
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent square_15
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent wait_4
      color = black
      letterHeight = 0.02
      pos = (-0.6, -0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = wait
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    ImageComponent forward_4
      image = images/arrow.png
      pos = (0.5, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine rewardframe4_2
    ImageComponent tree1_16
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent tree2_16
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent tree3_16
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent tree4_16
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent square_16
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent wait_5
      color = black
      letterHeight = 0.02
      pos = (0.6, -0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = wait
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    ImageComponent forward_5
      image = images/arrow.png
      pos = (-0.5, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine rewardframe5_2
    ImageComponent tree1_17
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent tree2_17
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent tree3_17
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent tree4_17
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent square_17
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent wait_6
      color = black
      letterHeight = 0.02
      pos = (-0.6, -0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = wait
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    ImageComponent forward_6
      image = images/arrow.png
      pos = (0.5, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine rewardframe1_3
    ImageComponent tree1_18
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_18
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree3_18
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree4_18
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent circle1
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent wait_7
      color = black
      letterHeight = 0.02
      pos = (-0.6, -0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every repeat] = wait
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    ImageComponent forward_11
      image = images/arrow.png
      pos = (0.5, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent squaree_3
      image = images/square.png
      pos = (0.5, -0.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    MouseComponent mouse_3
      clickable = circle1
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine rewardframe1_4
    CodeComponent endclick
      Code Type = Auto->JS
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      Begin Routine:
        if sol.clicked_name[0] =='skipsq':
            continueRoutine = False
            reward1.finished = True
    ImageComponent tree1_19
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent tree2_19
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree3_19
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree4_19
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent circle4
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent wait_8
      color = black
      letterHeight = 0.02
      pos = (0, -0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every repeat] = wait
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    ImageComponent forward_12
      image = images/arrow.png
      pos = (0.5, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent squaree_4
      image = images/square.png
      pos = (0.5, -0.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    ImageComponent gcircle_3
      image = images/gcircle.png
      pos = (0, -0.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    TextComponent reward_7
      color = green
      letterHeight = 0.05
      pos = (-0.6, -0.08)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $($reward)
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    ImageComponent gcircle_4
      image = images/gcircle.png
      pos = (0, -0.2)
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine move
    ImageComponent tree
      image = images/tree.png
      pos [set every frame] = [480, 216 - frameN*216/60]
      size = (250, 250)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      units = pix
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    TextComponent text_3
      color = black
      letterHeight = 0.01
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = hi
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    TextComponent text_4
      color = black
      letterHeight = 100
      pos [set every frame] = [480,0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = hi
      units = pix
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  Routine choice
    CodeComponent endclick_2
      Code Type = Auto->JS
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      Each Frame:
        if sol.clicked_name[0] =='skipsq':
            reward1.finished = True
  Routine rewardframe2_3
    ImageComponent tree1_20
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree2_20
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_20
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree4_20
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent circle
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent forward_13
      image = images/arrow.png
      pos = (-0.5, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_4
      clickable = circle
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine rewardframe2_4
    CodeComponent endclick_3
      Code Type = Auto->JS
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      Begin Routine:
        if sol_2.clicked_name[0] =='skipsq_2':
            reward2.finished = True
    ImageComponent tree1_21
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree2_21
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    ImageComponent tree3_21
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree4_21
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent circle_6
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent reward_9
      color = green
      letterHeight = 0.05
      pos = (0.6, -0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        $($reward)
    ImageComponent forward_15
      image = images/arrow.png
      pos = (-0.5, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine startroutine
  Routine bound
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if time.thisN == 0: # only on the first trial
            startTime = globalClock.getTime()
      Each Frame:
        if globalClock.getTime() - startTime >= 5:
            time.finished = True
            continueRoutine = False
  Routine movetrees2
    ImageComponent tree1_22
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree1_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
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    ImageComponent tree2_22
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree2_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
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    ImageComponent tree3_22
      image = images/tree.png
      pos [set every repeat] = $(-0.5,0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree4_22
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent circle5_2
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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Flow
  Routine intro
  LoopInitiator time loopType="TrialHandler"
    Selected rows = 1:5
    conditionsFile = reward.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('rewardval1', 7.5), ('rewardval2', 7.3), ('rewardval3', 7.6), ('rewardval4', 7.1), ('rewardval5', 7.4), ('reward', 'rewardval1')]),
      OrderedDict([('rewardval1', 7.1), ('rewardval2', 6.9), ('rewardval3', 7.1), ('rewardval4', 6.6), ('rewardval5', 6.8), ('reward', 'rewardval2')]),
      OrderedDict([('rewardval1', 6.2), ('rewardval2', 6.2), ('rewardval3', 6.8), ('rewardval4', 6.1), ('rewardval5', 6.1), ('reward', 'rewardval3')]),
      OrderedDict([('rewardval1', 5.9), ('rewardval2', 5.8), ('rewardval3', 6.3), ('rewardval4', 5.8), ('rewardval5', 5.8), ('reward', 'rewardval4')]),
      OrderedDict([('rewardval1', 5.1), ('rewardval2', 5.1), ('rewardval3', 5.9), ('rewardval4', 5.3), ('rewardval5', 5.1), ('reward', 'rewardval5')]),
      OrderedDict([('rewardval1', 4.8), ('rewardval2', 4.6), ('rewardval3', 5.4), ('rewardval4', 4.8), ('rewardval5', 4.6), ('reward', None)]),
      OrderedDict([('rewardval1', 4.0), ('rewardval2', 4.0), ('rewardval3', 4.6), ('rewardval4', 4.0), ('rewardval5', 4.1), ('reward', None)]),
      OrderedDict([('rewardval1', 3.1), ('rewardval2', 3.2), ('rewardval3', 3.9), ('rewardval4', 3.6), ('rewardval5', 3.6), ('reward', None)]),
      OrderedDict([('rewardval1', 2.6), ('rewardval2', 2.4), ('rewardval3', 3.2), ('rewardval4', 3.1), ('rewardval5', 2.8), ('reward', None)]),
      OrderedDict([('rewardval1', 2.1), ('rewardval2', 1.3), ('rewardval3', 2.4), ('rewardval4', 2.7), ('rewardval5', 2.1), ('reward', None)])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
    Routine bound
    LoopInitiator reward1 loopType="TrialHandler"
      Selected rows = 0:13
      conditionsFile = reward.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('rewardval1', 7.5), ('rewardval2', 7.3), ('rewardval3', 7.6), ('rewardval4', 7.1), ('rewardval5', 7.4)]),
        OrderedDict([('rewardval1', 7.1), ('rewardval2', 6.9), ('rewardval3', 7.1), ('rewardval4', 6.6), ('rewardval5', 6.8)]),
        OrderedDict([('rewardval1', 6.2), ('rewardval2', 6.2), ('rewardval3', 6.8), ('rewardval4', 6.1), ('rewardval5', 6.1)]),
        OrderedDict([('rewardval1', 5.9), ('rewardval2', 5.8), ('rewardval3', 6.3), ('rewardval4', 5.8), ('rewardval5', 5.8)]),
        OrderedDict([('rewardval1', 5.1), ('rewardval2', 5.1), ('rewardval3', 5.9), ('rewardval4', 5.3), ('rewardval5', 5.1)]),
        OrderedDict([('rewardval1', 4.8), ('rewardval2', 4.6), ('rewardval3', 5.4), ('rewardval4', 4.8), ('rewardval5', 4.6)]),
        OrderedDict([('rewardval1', 4.0), ('rewardval2', 4.0), ('rewardval3', 4.6), ('rewardval4', 4.0), ('rewardval5', 4.1)]),
        OrderedDict([('rewardval1', 3.1), ('rewardval2', 3.2), ('rewardval3', 3.9), ('rewardval4', 3.6), ('rewardval5', 3.6)]),
        OrderedDict([('rewardval1', 2.6), ('rewardval2', 2.4), ('rewardval3', 3.2), ('rewardval4', 3.1), ('rewardval5', 2.8)]),
        OrderedDict([('rewardval1', 2.1), ('rewardval2', 1.3), ('rewardval3', 2.4), ('rewardval4', 2.7), ('rewardval5', 2.1)]),
        OrderedDict([('rewardval1', 1.3), ('rewardval2', 0.0), ('rewardval3', 1.7), ('rewardval4', 2.1), ('rewardval5', 1.4)]),
        OrderedDict([('rewardval1', 0.7), ('rewardval2', None), ('rewardval3', 1.1), ('rewardval4', 1.3), ('rewardval5', 0.0)])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
      Routine rewardframe1_3
      Routine rewardframe1_2
      Routine rewardframe1
      Routine rewardframe1_4
    LoopTerminator reward1
    LoopInitiator pos_1 loopType="TrialHandler"
      conditionsFile = pos.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('tree1_n', -0.2), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.21), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.22), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.23), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.24), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.25), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.26), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.27), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.28), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.29), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.3), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.31), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.32), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.33), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.34), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.35), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.36), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.37), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.38), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.39), ('tree2_p', -0.6)]),
        OrderedDict([('tree1_n', -0.4), ('tree2_p', 0.0)]),
        OrderedDict([('tree1_n', -0.6), ('tree2_p', -0.01)]),
        OrderedDict([('tree1_n', -0.6), ('tree2_p', -0.02)]),
        OrderedDict([('tree1_n', -0.6), ('tree2_p', -0.03)]),
        OrderedDict([('tree1_n', -0.6), ('tree2_p', -0.04)]),
        OrderedDict([('tree1_n', -0.6), ('tree2_p', -0.05)]),
        OrderedDict([('tree1_n', -0.6), ('tree2_p', -0.06)]),
        OrderedDict([('tree1_n', -0.6), ('tree2_p', -0.07)])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
      Routine movetrees
    LoopTerminator pos_1
    LoopInitiator reward2 loopType="TrialHandler"
      Selected rows = 0:11
      conditionsFile = reward.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('rewardval1', 7.5), ('rewardval2', 7.3), ('rewardval3', 7.6), ('rewardval4', 7.1), ('rewardval5', 7.4)]),
        OrderedDict([('rewardval1', 7.1), ('rewardval2', 6.9), ('rewardval3', 7.1), ('rewardval4', 6.6), ('rewardval5', 6.8)]),
        OrderedDict([('rewardval1', 6.2), ('rewardval2', 6.2), ('rewardval3', 6.8), ('rewardval4', 6.1), ('rewardval5', 6.1)]),
        OrderedDict([('rewardval1', 5.9), ('rewardval2', 5.8), ('rewardval3', 6.3), ('rewardval4', 5.8), ('rewardval5', 5.8)]),
        OrderedDict([('rewardval1', 5.1), ('rewardval2', 5.1), ('rewardval3', 5.9), ('rewardval4', 5.3), ('rewardval5', 5.1)]),
        OrderedDict([('rewardval1', 4.8), ('rewardval2', 4.6), ('rewardval3', 5.4), ('rewardval4', 4.8), ('rewardval5', 4.6)]),
        OrderedDict([('rewardval1', 4.0), ('rewardval2', 4.0), ('rewardval3', 4.6), ('rewardval4', 4.0), ('rewardval5', 4.1)]),
        OrderedDict([('rewardval1', 3.1), ('rewardval2', 3.2), ('rewardval3', 3.9), ('rewardval4', 3.6), ('rewardval5', 3.6)]),
        OrderedDict([('rewardval1', 2.6), ('rewardval2', 2.4), ('rewardval3', 3.2), ('rewardval4', 3.1), ('rewardval5', 2.8)]),
        OrderedDict([('rewardval1', 2.1), ('rewardval2', 1.3), ('rewardval3', 2.4), ('rewardval4', 2.7), ('rewardval5', 2.1)]),
        OrderedDict([('rewardval1', 1.3), ('rewardval2', 0.0), ('rewardval3', 1.7), ('rewardval4', 2.1), ('rewardval5', 1.4)]),
        OrderedDict([('rewardval1', 0.7), ('rewardval2', None), ('rewardval3', 1.1), ('rewardval4', 1.3), ('rewardval5', 0.0)])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
      Routine rewardframe2_3
      Routine rewardframe2_2
      Routine rewardframe2
      Routine rewardframe2_4
    LoopTerminator reward2
    LoopInitiator pos_2 loopType="TrialHandler"
      conditionsFile = pos.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine movetrees2
    LoopTerminator pos_2
  LoopTerminator time
  Routine end
  LoopInitiator pos2 loopType="TrialHandler"
    conditionsFile = pos.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('tree1_n', -0.2), ('tree2_p', 0.2), ('tree3_n', 0.6), ('tree4_p', -0.6)]),
      OrderedDict([('tree1_n', -0.25), ('tree2_p', 0.15), ('tree3_n', 0.55), ('tree4_p', -0.6)]),
      OrderedDict([('tree1_n', -0.3), ('tree2_p', 0.1), ('tree3_n', 0.5), ('tree4_p', -0.6)]),
      OrderedDict([('tree1_n', -0.35), ('tree2_p', 0.05), ('tree3_n', 0.45), ('tree4_p', -0.6)]),
      OrderedDict([('tree1_n', -0.4), ('tree2_p', 0.0), ('tree3_n', 0.4), ('tree4_p', 0.6)]),
      OrderedDict([('tree1_n', -0.45), ('tree2_p', -0.05), ('tree3_n', 0.35), ('tree4_p', 0.6)]),
      OrderedDict([('tree1_n', -0.5), ('tree2_p', -0.1), ('tree3_n', 0.3), ('tree4_p', 0.6)]),
      OrderedDict([('tree1_n', -0.55), ('tree2_p', -0.15), ('tree3_n', 0.25), ('tree4_p', 0.6)]),
      OrderedDict([('tree1_n', -0.6), ('tree2_p', -0.2), ('tree3_n', 0.2), ('tree4_p', 0.6)])]
    Routine movetrees_2
  LoopTerminator pos2
  Routine end
