PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
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Routines
  Routine trial1
    ImageComponent tree1
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree1_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree2
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree2_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree3
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree3_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree4
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree4_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree5
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree5_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree6
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree6_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent square
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine rewardframe
    ImageComponent tree1_3
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_3
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_3
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_3
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree5_3
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree6_3
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent square_3
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent reward
      color = green
      letterHeight = 0.05
      pos = (-0.6, -0.08)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rewardval
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    MouseComponent resp_2
      clickable = tree4_3
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine rewardframe1
    ImageComponent tree1_4
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_4
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_4
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_4
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree5_4
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree6_4
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent square_4
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent reward_2
      color = green
      letterHeight = 0.05
      pos = (-0.6, -0.08)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rewardval
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    MouseComponent resp
      clickable = tree4_4
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine rewardframe2
    ImageComponent tree1_5
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_5
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_5
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_5
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree5_5
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree6_5
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent square_5
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent reward_3
      color = green
      letterHeight = 0.05
      pos = (0.6, -0.08)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rewardval
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    MouseComponent resp_3
      clickable = tree3_5
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine rewardframe3
    ImageComponent tree1_7
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_7
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_7
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_7
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree5_7
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree6_7
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent square_7
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent reward_4
      color = green
      letterHeight = 0.05
      pos = (-0.6, -0.08)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rewardval
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    MouseComponent resp_4
      clickable = tree2_7
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = The end~
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  Routine startframe
    MouseComponent mouse
      clickable = square_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent square_2
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent tree1_2
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_2
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_2
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_2
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree5_2
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree6_2
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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  Routine intro
    TextComponent introtext
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = //add text
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  Routine movetrees
    ImageComponent tree1_6
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree1_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree2_6
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree2_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree3_6
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree3_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree4_6
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree4_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree5_6
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree5_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree6_6
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree6_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent square_6
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine intro
  Routine startframe
  LoopInitiator reward1 loopType="TrialHandler"
    conditionsFile = reward1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rewardval', 7.5), ('rewardpos', -0.2)]),
      OrderedDict([('rewardval', 7.1), ('rewardpos', 0.2)]),
      OrderedDict([('rewardval', 6.2), ('rewardpos', -0.2)]),
      OrderedDict([('rewardval', 5.9), ('rewardpos', 0.2)]),
      OrderedDict([('rewardval', 5.1), ('rewardpos', -0.2)]),
      OrderedDict([('rewardval', 4.8), ('rewardpos', 0.2)]),
      OrderedDict([('rewardval', 4.0), ('rewardpos', -0.2)]),
      OrderedDict([('rewardval', 3.1), ('rewardpos', 0.2)]),
      OrderedDict([('rewardval', 2.6), ('rewardpos', -0.2)]),
      OrderedDict([('rewardval', 2.1), ('rewardpos', 0.2)]),
      OrderedDict([('rewardval', 1.3), ('rewardpos', -0.2)]),
      OrderedDict([('rewardval', 0.7), ('rewardpos', 0.2)]),
      OrderedDict([('rewardval', 0.0), ('rewardpos', -0.2)])]
    Routine rewardframe1
  LoopTerminator reward1
  LoopInitiator con1 loopType="TrialHandler"
    conditionsFile = con1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('tree1_p', 0.4), ('tree2_n', 0.2), ('tree3_p', 0.0), ('tree4_n', -0.2), ('tree5_p', -0.6), ('tree6_n', -0.6)]),
      OrderedDict([('tree1_p', 0.35), ('tree2_n', 0.15), ('tree3_p', -0.05), ('tree4_n', -0.25), ('tree5_p', -0.6), ('tree6_n', 0.55)]),
      OrderedDict([('tree1_p', 0.3), ('tree2_n', 0.1), ('tree3_p', -0.1), ('tree4_n', -0.3), ('tree5_p', -0.6), ('tree6_n', 0.5)]),
      OrderedDict([('tree1_p', 0.25), ('tree2_n', 0.05), ('tree3_p', -0.15), ('tree4_n', -0.35), ('tree5_p', -0.6), ('tree6_n', 0.45)]),
      OrderedDict([('tree1_p', 0.2), ('tree2_n', 0.0), ('tree3_p', -0.2), ('tree4_n', -0.4), ('tree5_p', -0.6), ('tree6_n', 0.4)])]
    Routine movetrees
  LoopTerminator con1
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator reward2 loopType="TrialHandler"
      conditionsFile = reward2.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('rewardval', 7.3)]),
        OrderedDict([('rewardval', 6.9)]),
        OrderedDict([('rewardval', 6.2)]),
        OrderedDict([('rewardval', 5.8)]),
        OrderedDict([('rewardval', 5.1)]),
        OrderedDict([('rewardval', 4.6)]),
        OrderedDict([('rewardval', 4.0)]),
        OrderedDict([('rewardval', 3.2)]),
        OrderedDict([('rewardval', 2.4)]),
        OrderedDict([('rewardval', 1.3)]),
        OrderedDict([('rewardval', 0.0)])]
      Routine rewardframe2
    LoopTerminator reward2
    LoopInitiator con2 loopType="TrialHandler"
      conditionsFile = con2.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('tree1_p', 0.2), ('tree2_n', 0.0), ('tree3_p', -0.2), ('tree4_n', -0.4), ('tree5_p', -0.6), ('tree6_n', 0.4)]),
        OrderedDict([('tree1_p', 0.15), ('tree2_n', -0.05), ('tree3_p', -0.25), ('tree4_n', -0.45), ('tree5_p', 0.55), ('tree6_n', 0.35)]),
        OrderedDict([('tree1_p', 0.1), ('tree2_n', -0.1), ('tree3_p', -0.3), ('tree4_n', -0.5), ('tree5_p', 0.5), ('tree6_n', 0.3)]),
        OrderedDict([('tree1_p', 0.05), ('tree2_n', -0.15), ('tree3_p', -0.35), ('tree4_n', -0.55), ('tree5_p', 0.45), ('tree6_n', 0.25)]),
        OrderedDict([('tree1_p', 0.0), ('tree2_n', -0.2), ('tree3_p', -0.4), ('tree4_n', -0.6), ('tree5_p', 0.4), ('tree6_n', 0.2)])]
      Routine movetrees
    LoopTerminator con2
    LoopInitiator reward3 loopType="TrialHandler"
      conditionsFile = reward3.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('rewardval', 7.6), ('rewardpos', -0.2)]),
        OrderedDict([('rewardval', 7.1), ('rewardpos', 0.2)]),
        OrderedDict([('rewardval', 6.8), ('rewardpos', -0.2)]),
        OrderedDict([('rewardval', 6.3), ('rewardpos', 0.2)]),
        OrderedDict([('rewardval', 5.9), ('rewardpos', -0.2)]),
        OrderedDict([('rewardval', 5.4), ('rewardpos', 0.2)]),
        OrderedDict([('rewardval', 4.6), ('rewardpos', -0.2)]),
        OrderedDict([('rewardval', 3.9), ('rewardpos', 0.2)]),
        OrderedDict([('rewardval', 3.2), ('rewardpos', -0.2)]),
        OrderedDict([('rewardval', 2.4), ('rewardpos', 0.2)]),
        OrderedDict([('rewardval', 1.7), ('rewardpos', -0.2)]),
        OrderedDict([('rewardval', 1.1), ('rewardpos', 0.2)]),
        OrderedDict([('rewardval', 0.0), ('rewardpos', -0.2)])]
      Routine rewardframe3
    LoopTerminator reward3
    LoopInitiator con3 loopType="TrialHandler"
      conditionsFile = con3.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('tree1_p', 0.4), ('tree2_n', 0.2), ('tree3_p', 0.0), ('tree4_n', -0.2), ('tree5_p', -0.6), ('tree6_n', -0.6)]),
        OrderedDict([('tree1_p', 0.35), ('tree2_n', 0.15), ('tree3_p', -0.05), ('tree4_n', -0.25), ('tree5_p', -0.6), ('tree6_n', 0.55)]),
        OrderedDict([('tree1_p', 0.3), ('tree2_n', 0.1), ('tree3_p', -0.1), ('tree4_n', -0.3), ('tree5_p', -0.6), ('tree6_n', 0.5)]),
        OrderedDict([('tree1_p', 0.25), ('tree2_n', 0.05), ('tree3_p', -0.15), ('tree4_n', -0.35), ('tree5_p', -0.6), ('tree6_n', 0.45)]),
        OrderedDict([('tree1_p', 0.2), ('tree2_n', 0.0), ('tree3_p', -0.2), ('tree4_n', -0.4), ('tree5_p', -0.6), ('tree6_n', 0.4)])]
      Routine movetrees
    LoopTerminator con3
    LoopInitiator reward4 loopType="TrialHandler"
      conditionsFile = reward4.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('rewardval', 7.1)]),
        OrderedDict([('rewardval', 6.6)]),
        OrderedDict([('rewardval', 6.1)]),
        OrderedDict([('rewardval', 5.8)]),
        OrderedDict([('rewardval', 5.3)]),
        OrderedDict([('rewardval', 4.8)]),
        OrderedDict([('rewardval', 4.0)]),
        OrderedDict([('rewardval', 3.6)]),
        OrderedDict([('rewardval', 3.1)]),
        OrderedDict([('rewardval', 2.7)]),
        OrderedDict([('rewardval', 2.1)]),
        OrderedDict([('rewardval', 1.3)]),
        OrderedDict([('rewardval', 0.0)])]
      Routine rewardframe2
    LoopTerminator reward4
    LoopInitiator con2_2 loopType="TrialHandler"
      conditionsFile = con2.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('tree1_p', 0.2), ('tree2_n', 0.0), ('tree3_p', -0.2), ('tree4_n', -0.4), ('tree5_p', -0.6), ('tree6_n', 0.4)]),
        OrderedDict([('tree1_p', 0.15), ('tree2_n', -0.05), ('tree3_p', -0.25), ('tree4_n', -0.45), ('tree5_p', 0.55), ('tree6_n', 0.35)]),
        OrderedDict([('tree1_p', 0.1), ('tree2_n', -0.1), ('tree3_p', -0.3), ('tree4_n', -0.5), ('tree5_p', 0.5), ('tree6_n', 0.3)]),
        OrderedDict([('tree1_p', 0.05), ('tree2_n', -0.15), ('tree3_p', -0.35), ('tree4_n', -0.55), ('tree5_p', 0.45), ('tree6_n', 0.25)]),
        OrderedDict([('tree1_p', 0.0), ('tree2_n', -0.2), ('tree3_p', -0.4), ('tree4_n', -0.6), ('tree5_p', 0.4), ('tree6_n', 0.2)])]
      Routine movetrees
    LoopTerminator con2_2
    LoopInitiator reward5 loopType="TrialHandler"
      conditionsFile = reward5.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('rewardval', 7.4)]),
        OrderedDict([('rewardval', 6.8)]),
        OrderedDict([('rewardval', 6.1)]),
        OrderedDict([('rewardval', 5.8)]),
        OrderedDict([('rewardval', 5.1)]),
        OrderedDict([('rewardval', 4.6)]),
        OrderedDict([('rewardval', 4.1)]),
        OrderedDict([('rewardval', 3.6)]),
        OrderedDict([('rewardval', 2.8)]),
        OrderedDict([('rewardval', 2.1)]),
        OrderedDict([('rewardval', 1.4)]),
        OrderedDict([('rewardval', 0.0)])]
      Routine rewardframe3
    LoopTerminator reward5
    LoopInitiator con3_2 loopType="TrialHandler"
      conditionsFile = con3.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('tree1_p', 0.4), ('tree2_n', 0.2), ('tree3_p', 0.0), ('tree4_n', -0.2), ('tree5_p', -0.4), ('tree6_n', -0.6)]),
        OrderedDict([('tree1_p', 0.35), ('tree2_n', 0.15), ('tree3_p', -0.05), ('tree4_n', -0.25), ('tree5_p', -0.45), ('tree6_n', 0.55)]),
        OrderedDict([('tree1_p', 0.3), ('tree2_n', 0.1), ('tree3_p', -0.1), ('tree4_n', -0.3), ('tree5_p', -0.5), ('tree6_n', 0.5)]),
        OrderedDict([('tree1_p', 0.25), ('tree2_n', 0.05), ('tree3_p', -0.15), ('tree4_n', -0.35), ('tree5_p', -0.55), ('tree6_n', 0.45)]),
        OrderedDict([('tree1_p', 0.2), ('tree2_n', 0.0), ('tree3_p', -0.2), ('tree4_n', -0.4), ('tree5_p', -0.6), ('tree6_n', 0.4)])]
      Routine movetrees
    LoopTerminator con3_2
  LoopTerminator trials
  Routine end
