PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
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Routines
  Routine trial1
    ImageComponent tree1
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree1_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree2
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree2_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree3
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree3_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree4
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree4_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree5
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree5_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree6
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree6_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent square
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine rewardframe
    ImageComponent tree1_3
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_3
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_3
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_3
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree5_3
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree6_3
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent square_3
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent reward
      color = green
      letterHeight = 0.05
      pos = (-0.6, -0.08)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rewardval
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    MouseComponent resp_2
      clickable = tree4_3
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine rewardframe1
    ImageComponent tree1_4
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_4
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_4
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_4
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree5_4
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree6_4
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent square_4
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent reward_2
      color = green
      letterHeight = 0.05
      pos = (-0.6, -0.08)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rewardval1
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    MouseComponent resp
      clickable = tree4_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent forward
      image = images/arrow.png
      pos = (0.5, -0.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent squaree
      image = images/square.png
      pos = (0.5, -0.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent skip
      clickable = squaree
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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  Routine rewardframe2
    ImageComponent tree1_5
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_5
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_5
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_5
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree5_5
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree6_5
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent square_5
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent reward_3
      color = green
      letterHeight = 0.05
      pos = (0.6, -0.08)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rewardval2
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    MouseComponent resp_3
      clickable = tree3_5
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine rewardframe3
    ImageComponent tree1_7
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_7
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_7
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_7
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree5_7
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree6_7
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent square_7
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent reward_4
      color = green
      letterHeight = 0.05
      pos = (-0.6, -0.08)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rewardval3
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    MouseComponent resp_4
      clickable = tree2_7
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = The end~
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  Routine startframe
    MouseComponent mouse
      clickable = square_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent square_2
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent tree1_2
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_2
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_2
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_2
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree5_2
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree6_2
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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  Routine intro
    TextComponent introtext
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = //add text
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  Routine movetrees
    ImageComponent tree1_6
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree1_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree2_6
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree2_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree3_6
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree3_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree4_6
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree4_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree5_6
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree5_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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    ImageComponent tree6_6
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree6_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent square_6
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine rewardframe4
    ImageComponent tree1_8
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_8
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_8
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_8
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree5_8
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree6_8
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent square_8
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent reward_5
      color = green
      letterHeight = 0.05
      pos = (0.6, -0.08)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rewardval4
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    MouseComponent resp_5
      clickable = tree3_5
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine rewardframe5
    ImageComponent tree1_9
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree2_9
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree3_9
      image = images/tree.png
      pos [set every repeat] = $(0.5, -0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree4_9
      image = images/tree.png
      pos [set every repeat] = $(-0.5, -0.6)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree5_9
      image = images/tree.png
      pos [set every repeat] = $(0.5, 0.4)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent tree6_9
      image = images/tree.png
      pos [set every repeat] = $(-0.5, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent square_9
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent reward_6
      color = green
      letterHeight = 0.05
      pos = (-0.6, -0.08)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rewardval5
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    MouseComponent resp_6
      clickable = tree2_7
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine movetrees2
    ImageComponent tree1_10
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree2_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree2_10
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree3_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree3_10
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree4_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree4_10
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree5_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree5_10
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree6_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree6_10
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree1_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent square_10
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine movetrees3
    ImageComponent tree1_11
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree1_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree2_11
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree2_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree3_11
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree3_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree4_11
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree4_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree5_11
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree5_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree6_11
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree6_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent square_11
      image = images/hollow.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine intro
  Routine startframe
  LoopInitiator reward1 loopType="TrialHandler"
    Selected rows = 0:13
    conditionsFile = reward.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('rewardval1', 7.5), ('rewardval2', 7.3), ('rewardval3', 7.6), ('rewardval4', 7.1), ('rewardval5', 7.4)]),
      OrderedDict([('rewardval1', 7.1), ('rewardval2', 6.9), ('rewardval3', 7.1), ('rewardval4', 6.6), ('rewardval5', 6.8)]),
      OrderedDict([('rewardval1', 6.2), ('rewardval2', 6.2), ('rewardval3', 6.8), ('rewardval4', 6.1), ('rewardval5', 6.1)]),
      OrderedDict([('rewardval1', 5.9), ('rewardval2', 5.8), ('rewardval3', 6.3), ('rewardval4', 5.8), ('rewardval5', 5.8)]),
      OrderedDict([('rewardval1', 5.1), ('rewardval2', 5.1), ('rewardval3', 5.9), ('rewardval4', 5.3), ('rewardval5', 5.1)]),
      OrderedDict([('rewardval1', 4.8), ('rewardval2', 4.6), ('rewardval3', 5.4), ('rewardval4', 4.8), ('rewardval5', 4.6)]),
      OrderedDict([('rewardval1', 4.0), ('rewardval2', 4.0), ('rewardval3', 4.6), ('rewardval4', 4.0), ('rewardval5', 4.1)]),
      OrderedDict([('rewardval1', 3.1), ('rewardval2', 3.2), ('rewardval3', 3.9), ('rewardval4', 3.6), ('rewardval5', 3.6)]),
      OrderedDict([('rewardval1', 2.6), ('rewardval2', 2.4), ('rewardval3', 3.2), ('rewardval4', 3.1), ('rewardval5', 2.8)]),
      OrderedDict([('rewardval1', 2.1), ('rewardval2', 1.3), ('rewardval3', 2.4), ('rewardval4', 2.7), ('rewardval5', 2.1)]),
      OrderedDict([('rewardval1', 1.3), ('rewardval2', 0.0), ('rewardval3', 1.7), ('rewardval4', 2.1), ('rewardval5', 1.4)]),
      OrderedDict([('rewardval1', 0.7), ('rewardval2', None), ('rewardval3', 1.1), ('rewardval4', 1.3), ('rewardval5', 0.0)])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
    Routine rewardframe1
  LoopTerminator reward1
  LoopInitiator pos1 loopType="TrialHandler"
    conditionsFile = pos.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('tree1_p', 0.4), ('tree2_n', 0.2), ('tree3_p', 0.0), ('tree4_n', -0.2), ('tree5_p', -0.6), ('tree6_n', -0.6)]),
      OrderedDict([('tree1_p', 0.35), ('tree2_n', 0.15), ('tree3_p', -0.05), ('tree4_n', -0.25), ('tree5_p', -0.6), ('tree6_n', 0.55)]),
      OrderedDict([('tree1_p', 0.3), ('tree2_n', 0.1), ('tree3_p', -0.1), ('tree4_n', -0.3), ('tree5_p', -0.6), ('tree6_n', 0.5)]),
      OrderedDict([('tree1_p', 0.25), ('tree2_n', 0.05), ('tree3_p', -0.15), ('tree4_n', -0.35), ('tree5_p', -0.6), ('tree6_n', 0.45)]),
      OrderedDict([('tree1_p', 0.2), ('tree2_n', 0.0), ('tree3_p', -0.2), ('tree4_n', -0.4), ('tree5_p', -0.6), ('tree6_n', 0.4)])]
    Routine movetrees
  LoopTerminator pos1
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator reward2 loopType="TrialHandler"
      Selected rows = 0:11
      conditionsFile = reward.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('rewardval1', 7.5), ('rewardval2', 7.3), ('rewardval3', 7.6), ('rewardval4', 7.1), ('rewardval5', 7.4)]),
        OrderedDict([('rewardval1', 7.1), ('rewardval2', 6.9), ('rewardval3', 7.1), ('rewardval4', 6.6), ('rewardval5', 6.8)]),
        OrderedDict([('rewardval1', 6.2), ('rewardval2', 6.2), ('rewardval3', 6.8), ('rewardval4', 6.1), ('rewardval5', 6.1)]),
        OrderedDict([('rewardval1', 5.9), ('rewardval2', 5.8), ('rewardval3', 6.3), ('rewardval4', 5.8), ('rewardval5', 5.8)]),
        OrderedDict([('rewardval1', 5.1), ('rewardval2', 5.1), ('rewardval3', 5.9), ('rewardval4', 5.3), ('rewardval5', 5.1)]),
        OrderedDict([('rewardval1', 4.8), ('rewardval2', 4.6), ('rewardval3', 5.4), ('rewardval4', 4.8), ('rewardval5', 4.6)]),
        OrderedDict([('rewardval1', 4.0), ('rewardval2', 4.0), ('rewardval3', 4.6), ('rewardval4', 4.0), ('rewardval5', 4.1)]),
        OrderedDict([('rewardval1', 3.1), ('rewardval2', 3.2), ('rewardval3', 3.9), ('rewardval4', 3.6), ('rewardval5', 3.6)]),
        OrderedDict([('rewardval1', 2.6), ('rewardval2', 2.4), ('rewardval3', 3.2), ('rewardval4', 3.1), ('rewardval5', 2.8)]),
        OrderedDict([('rewardval1', 2.1), ('rewardval2', 1.3), ('rewardval3', 2.4), ('rewardval4', 2.7), ('rewardval5', 2.1)]),
        OrderedDict([('rewardval1', 1.3), ('rewardval2', 0.0), ('rewardval3', 1.7), ('rewardval4', 2.1), ('rewardval5', 1.4)]),
        OrderedDict([('rewardval1', 0.7), ('rewardval2', None), ('rewardval3', 1.1), ('rewardval4', 1.3), ('rewardval5', 0.0)])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
      Routine rewardframe2
    LoopTerminator reward2
    LoopInitiator pos2 loopType="TrialHandler"
      conditionsFile = pos.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('tree1_p', 0.4), ('tree2_n', 0.2), ('tree3_p', 0.0), ('tree4_n', -0.2), ('tree5_p', -0.6), ('tree6_n', -0.6)]),
        OrderedDict([('tree1_p', 0.35), ('tree2_n', 0.15), ('tree3_p', -0.05), ('tree4_n', -0.25), ('tree5_p', -0.6), ('tree6_n', 0.55)]),
        OrderedDict([('tree1_p', 0.3), ('tree2_n', 0.1), ('tree3_p', -0.1), ('tree4_n', -0.3), ('tree5_p', -0.6), ('tree6_n', 0.5)]),
        OrderedDict([('tree1_p', 0.25), ('tree2_n', 0.05), ('tree3_p', -0.15), ('tree4_n', -0.35), ('tree5_p', -0.6), ('tree6_n', 0.45)]),
        OrderedDict([('tree1_p', 0.2), ('tree2_n', 0.0), ('tree3_p', -0.2), ('tree4_n', -0.4), ('tree5_p', -0.6), ('tree6_n', 0.4)])]
      Routine movetrees2
    LoopTerminator pos2
    LoopInitiator reward3 loopType="TrialHandler"
      Selected rows = 0:13
      conditionsFile = reward.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine rewardframe3
    LoopTerminator reward3
    LoopInitiator pos3 loopType="TrialHandler"
      conditionsFile = pos.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine movetrees3
    LoopTerminator pos3
    LoopInitiator reward4 loopType="TrialHandler"
      Selected rows = 0:13
      conditionsFile = reward.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine rewardframe4
    LoopTerminator reward4
    LoopInitiator pos2_2 loopType="TrialHandler"
      conditionsFile = pos.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine movetrees2
    LoopTerminator pos2_2
    LoopInitiator reward5 loopType="TrialHandler"
      Selected rows = 0:12
      conditionsFile = reward.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine rewardframe5
    LoopTerminator reward5
    LoopInitiator pos3_2 loopType="TrialHandler"
      conditionsFile = pos.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine movetrees3
    LoopTerminator pos3_2
  LoopTerminator trials
  Routine end
