PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = untitled
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Routines
  Routine end
    TextComponent wdys
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = What did you see?
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    TextComponent answer
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 5.0
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      text:
        The right answer is P!
        Did you guess correctly?
  Routine Trial
    TextComponent trial1
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $letters
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  Routine intro
    TextComponent Intro
      color = Black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.0
      text = Hey there! This is the attentional blink task. On the screen, you will see a series of alphabets changing in quick succession. Your goal is to identify the letter that follows the letter "K". Good luck!
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    TextComponent Ready
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 2.0
      text = Ready...GO!
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('letters', 'W')]),
      OrderedDict([('letters', 'B')]),
      OrderedDict([('letters', 'R')]),
      OrderedDict([('letters', 'N')]),
      OrderedDict([('letters', 'Q')]),
      OrderedDict([('letters', 'O')]),
      OrderedDict([('letters', 'S')]),
      OrderedDict([('letters', 'L ')]),
      OrderedDict([('letters', 'V')]),
      OrderedDict([('letters', 'B')]),
      OrderedDict([('letters', 'K')]),
      OrderedDict([('letters', 'P')]),
      OrderedDict([('letters', 'H')]),
      OrderedDict([('letters', 'Y')]),
      OrderedDict([('letters', 'I')]),
      OrderedDict([('letters', 'Z')]),
      OrderedDict([('letters', 'M')]),
      OrderedDict([('letters', 'U')])]
    Routine Trial
  LoopTerminator trials
  Routine end
