PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = posner
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Routines
  Routine trial
    ImageComponent cue
      image [set every repeat] = $cue_file
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
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    ImageComponent target
      image = images/target.png
      pos [set every repeat] = $(target_x, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.7
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    MouseComponent resp
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.7
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('cue_file', 'images/arrow_left.png'), ('target_x', -0.5), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/arrow_left.png'), ('target_x', -0.5), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/arrow_left.png'), ('target_x', -0.5), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/arrow_left.png'), ('target_x', -0.5), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/arrow_right.png'), ('target_x', 0.5), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/arrow_right.png'), ('target_x', 0.5), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/arrow_right.png'), ('target_x', 0.5), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/arrow_right.png'), ('target_x', 0.5), ('is_valid', 'valid')]),
      OrderedDict([('cue_file', 'images/arrow_left.png'), ('target_x', 0.5), ('is_valid', 'invalid')]),
      OrderedDict([('cue_file', 'images/arrow_right.png'), ('target_x', -0.5), ('is_valid', 'invalid')])]
    Routine trial
  LoopTerminator trials
