PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
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Routines
  Routine trial1
    ImageComponent tree1
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree1_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree2
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree2_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree3
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree3_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree4
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree4_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree5
      image = images/tree.png
      pos [set every repeat] = $(0.5, tree5_p)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent tree6
      image = images/tree.png
      pos [set every repeat] = $(-0.5, tree6_n)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('tree1_p', 0.5), ('tree2_n', 0.3), ('tree3_p', 0.1), ('tree4_n', -0.1), ('tree5_p', -0.3), ('tree6_n', -0.5)]),
      OrderedDict([('tree1_p', 0.4), ('tree2_n', 0.2), ('tree3_p', 0.0), ('tree4_n', -0.2), ('tree5_p', -0.4), ('tree6_n', 0.5)]),
      OrderedDict([('tree1_p', 0.3), ('tree2_n', 0.1), ('tree3_p', -0.1), ('tree4_n', -0.3), ('tree5_p', -0.5), ('tree6_n', 0.4)]),
      OrderedDict([('tree1_p', 0.2), ('tree2_n', 0.0), ('tree3_p', -0.2), ('tree4_n', -0.4), ('tree5_p', 0.5), ('tree6_n', 0.3)]),
      OrderedDict([('tree1_p', 0.1), ('tree2_n', -0.1), ('tree3_p', -0.3), ('tree4_n', -0.5), ('tree5_p', 0.4), ('tree6_n', 0.2)]),
      OrderedDict([('tree1_p', 0.0), ('tree2_n', -0.2), ('tree3_p', -0.4), ('tree4_n', 0.5), ('tree5_p', 0.3), ('tree6_n', 0.1)]),
      OrderedDict([('tree1_p', -0.1), ('tree2_n', -0.3), ('tree3_p', -0.5), ('tree4_n', 0.4), ('tree5_p', 0.2), ('tree6_n', 0.0)]),
      OrderedDict([('tree1_p', -0.2), ('tree2_n', -0.4), ('tree3_p', 0.5), ('tree4_n', 0.3), ('tree5_p', 0.1), ('tree6_n', -0.1)]),
      OrderedDict([('tree1_p', -0.3), ('tree2_n', -0.5), ('tree3_p', 0.4), ('tree4_n', 0.2), ('tree5_p', 0.0), ('tree6_n', -0.2)]),
      OrderedDict([('tree1_p', -0.4), ('tree2_n', 0.5), ('tree3_p', 0.3), ('tree4_n', 0.1), ('tree5_p', -0.1), ('tree6_n', -0.3)]),
      OrderedDict([('tree1_p', -0.5), ('tree2_n', 0.4), ('tree3_p', 0.2), ('tree4_n', 0.0), ('tree5_p', -0.2), ('tree6_n', -0.4)])]
    Routine trial1
  LoopTerminator trials
